<?xml version="1.0"?>
<ReactionScheme>

  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="3." kdiffunit="mu2/s" />
  <!--Added from Andy's model-->
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  
  <Specie name="CaCbuf" id="CaCbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="Cbuf" id="Cbuf" kdiff="10" kdiffunit="mu2/s"/>
  
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CaBCa" id="CaBCa" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaB" id="CaB" kdiff="10" kdiffunit="mu2/s"/>


  <Specie name="pmca" id="pmca" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pmcaCa" id="pmcaCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s" />
<Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <!--Calmodulin-->
  <Specie name="CaMCa2" id="CaMCa2" kdiff="4" kdiffunit="mu2/s" />
  <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
  <!-- 4 Ca bound Calmodulin-->
  <!-- -->
  
  <Specie name="PP2B" id="PP2B" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="PP2CaMCa2" id="PP2BCaMCa2" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0"
	  kdiffunit="mu2/s" />
  
  <Specie name="CK"  id="CK"            kdiff="0.1"   kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4"       id="CKCaMCa4"      kdiff="0.1"   kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa4"      id="CKpCaMCa4"     kdiff="3.6"   kdiffunit="mu2/s"/>
  <Specie name="CKp"            id="CKp"           kdiff="3.6"   kdiffunit="mu2/s"/>
  <Specie name="CKpPP1"         id="CKpPP1"        kdiff="0"     kdiffunit="mu2/s"/>
  
<Specie name="CKpCaMCa4PP1"         id="CKpCaMCa4PP1"        kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="PKAc" id="PKAc" kdiff="0.836" kdiffunit="mu2/s" />

<Specie name="I1" id="I1" kdiff="9.49" kdiffunit="mu2/s" />
<Specie name="I1PKAc" id="I1PKAc" kdiff="10.6" kdiffunit="mu2/s" />
<Specie name="Ip35" id="Ip35" kdiff="7.02" kdiffunit="mu2/s" />
<Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="Ip35PP1" id="Ip35PP1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="Ip35PP2BCaMCa4" id="Ip35PP2BCaMCa4" kdiff="0"
kdiffunit="mu2/s" />
<Specie name="Ip35PP1PP2BCaMCa4" id="Ip35PP1PP2BCaMCa4" kdiff="0"
kdiffunit="mu2/s" />

<!--AMPARs-->
<Specie name="GluR1" id="GluR1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845" id="GluR1_S845" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S831" id="GluR1_S831" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567" id="GluR1_S567" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="GluR1_S845_S831" id="GluR1_S845_S831" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S567" id="GluR1_S845_S567" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_PKAc" id="GluR1_PKAc" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKCaM" id="GluR1_CKCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKpCaM" id="GluR1_CKpCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKp" id="GluR1_CKp" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKCaM2" id="GluR1_CKCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKpCaM2" id="GluR1_CKpCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKp2" id="GluR1_CKp2" kdiff="0"
	kdiffunit="mu2/s" />


<Specie name="GluR1_S845_CKCaM" id="GluR1_S845_CKCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_CKpCaM" id="GluR1_S845_CKpCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_CKp" id="GluR1_S845_CKp" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_CKCaM2" id="GluR1_S845_CKCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_CKpCaM2" id="GluR1_S845_CKpCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_CKp2" id="GluR1_S845_CKp2" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="GluR1_S831_PKAc" id="GluR1_S831_PKAc" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567_PKAc" id="GluR1_S567_PKAc" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_PP1" id="GluR1_S845_PP1" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S831_PP1" id="GluR1_S845_S831_PP1"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S567_PP1" id="GluR1_S845_S567_PP1"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S831_PP1_2" id="GluR1_S845_S831_PP1_2"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S567_PP1_2" id="GluR1_S845_S567_PP1_2"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S831_PP2B_2" id="GluR1_S845_S831_PP2B_2"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S567_PP2B_2" id="GluR1_S845_S567_PP2B_2"
	kdiff="0" kdiffunit="mu2/s" />

<Specie name="GluR1_S831_PP1" id="GluR1_S831_PP1" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567_PP1" id="GluR1_S567_PP1" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="GluR1_S831_PP2B" id="GluR1_S831_PP2B" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567_PP2B" id="GluR1_S567_PP2B" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="GluR1_S845_PP2B" id="GluR1_S845_PP2B" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S831_PP2B" id="GluR1_S845_S831_PP2B"
	kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_S567_PP2B" id="GluR1_S845_S567_PP2B"
	kdiff="0" kdiffunit="mu2/s" />
<!--*************************************************************************
    Now, the reactions themselves   SAME means params are same in both files
    **************************************************************************-->
<!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>1.1e-3</reverseRate>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>1.1e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>


<!-- Irreversible IC Ca Buffer    Ca + CaB <-> CaBCa -->
    <Reaction name = "CaIn_buffer" id="CaIn_buffer">
         <Reactant specieID="Ca"/>
         <Reactant specieID="CaB"/>
         <Product specieID="CaBCa"/>

         <forwardRate>2.8e-5</forwardRate>
         <reverseRate>0</reverseRate>
         <Q10>0.2</Q10>
    </Reaction>
    <Reaction name="CaCbufCa+Cbuf" id="CaCbufCa+Cbuf">
      <Reactant specieID="CaCbuf" />
      <Product specieID="Cbuf" />
      <Product specieID="Ca" />
      <forwardRate>20e-03</forwardRate>
      <reverseRate>0</reverseRate>
    </Reaction>
    <Reaction name="CaOut+CbufNULL" id="CaOut_CbufNULL">
      <Reactant specieID="CaOut" />
      <Reactant specieID="Cbuf" />
      <forwardRate>1e-06</forwardRate>
      <reverseRate>0</reverseRate>
    </Reaction>
    


<!-- CaM, CaMCa4 and PP2B Binding -->
<!--1) CaM  + 2Ca
        <-> CaMCa2 -->
<!--This is the C site-->
<Reaction name="CaM_bind" id="CaM_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa2" />
  <forwardRate>6e-6</forwardRate>
  <reverseRate>9.1e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--2) CaMCa2  + 2Ca
        <-> CaMCa4 -->
<!--This is the N-site-->
<Reaction name="CaMCa2_bind" id="CaMCa2_bind">
  <Reactant specieID="CaMCa2" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa4" />
  <forwardRate>0.1e-3</forwardRate>
  <reverseRate>1000e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- Kubota, Putkey, Waxham, 2007, Biophys J, 92:3848-3859, constants
     k5 and k_5-->
<!--2a) CaM  + Ng
        <-> NgCaM -->
<!--I step of the Neurogranin -->
<Reaction name="NgCaM_bind" id="NgCaM_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ng" />
  <Product specieID="NgCaM" />
  <forwardRate>28.e-6</forwardRate>
  <reverseRate>36.e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!--3) CaM  + PP2B
        <-> PP2CaM -->
<Reaction name="PP2_bind" id="PP2_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="PP2B" />
  <Product specieID="PP2BCaM" />
  <forwardRate>4.6e-06</forwardRate>
  <reverseRate>1.2e-6</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--4) CaMCa2  + PP2B
        <-> PP2BCaMCa2 -->
<Reaction name="PP2CaMC2_bind" id="PP2CaMC2_bind">
  <Reactant specieID="CaMCa2" />
  <Reactant specieID="PP2B" />
  <Product specieID="PP2BCaMCa2" />
  <forwardRate>4.6e-5</forwardRate>
  <reverseRate>1.2e-6</reverseRate>
  <!--

            <forwardRate>1e-3
            </forwardRate>
            <reverseRate>0.3e-3
            </reverseRate>
        -->
  <Q10>0.2</Q10>
</Reaction>
<!--5) CaMCa4  + PP2
        <-> PP2B -->
<Reaction name="PP2CaMCa4_bind" id="PP2CaMCa4_bind">
  <Reactant specieID="CaMCa4" />
  <Reactant specieID="PP2B" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>4.6e-5</forwardRate>
  <reverseRate>1.2e-6</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--6) PP2BCaM  + 2Ca
        <-> PP2BCaMCa2 -->
<Reaction name="PP2CaMCa_bind" id="PP2CaMCa_bind">
  <Reactant specieID="PP2BCaM" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="PP2BCaMCa2" />
  <forwardRate>6.e-4</forwardRate>
  <reverseRate>9.1e-2</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--7) PP2CaMC2  + 2Ca
        <-> PP2B -->
<Reaction name="PP2CaMCa2Ca_bind" id="PP2CaMCa2Ca_bind">
  <Reactant specieID="PP2BCaMCa2" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.0001</forwardRate>
  <reverseRate>1</reverseRate>
  <!--
            <forwardRate>0.1e-3
            </forwardRate>
            <reverseRate>10e-3
            </reverseRate>
        -->
  <Q10>0.2</Q10>
</Reaction>
<!--These are fine.-->

 <!--1) CaMCa4 + CK <-> CKCaMCa4  -->
    <Reaction name = "CK bind" id="CK_bind">
        <Reactant specieID="CaMCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCaMCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.95e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
        <Q10>    0.2            </Q10>
    </Reaction>
<!--2a) 3 CKCaMCa4 + 1 CKCaMCa4 <-> 3  CKCaMCa4 + 1 CKpCaMCa4-->
    <Reaction name = "CKCaM bind1" id="CKCaM_bind1">
        <Reactant specieID="CKCaMCa4"  power="4"        />
        <Product  specieID="CKCaMCa4"   power="3"         />
        <Product  specieID="CKpCaMCa4"           />
        <forwardRate> 35.0e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!--2b)  2 CKCaMCa4 + 1 CKCaMCa4 <-> 2 CKCaMCa4 + 1 CKpCaMCa4-->
    <Reaction name = "CKCaM bind2" id="CKCaM_bind2">
        <Reactant specieID="CKCaMCa4"  power="3"        />
        <Product  specieID="CKCaMCa4"  power="2"         />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 4.0e-12 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>
<!--2c)  2 CKpCaMCa4 + 2 CKCaMCa4 <-> 3 CKpCaMCa4 + 1 CKCaMCa4-->
    <Reaction name = "CKCaM bind3" id="CKCaM_bind3">
        <Reactant specieID="CKpCaMCa4"  power="2"        />
        <Reactant specieID="CKCaMCa4"  power="2"        />
        <Product  specieID="CKCaMCa4"           />
        <Product  specieID="CKpCaMCa4" power="3"         />

        <forwardRate> 55.1e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!-- CKpCaMCaMCa4 <-> CKp + CaMCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"              />
        <Product  specieID="CaMCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.02e-3   </reverseRate>
        <Q10>    0.2            </Q10>
    </Reaction>
  <!-- CKp + PP1 <-> CKpPP1 -->
    <Reaction name = "CKp bind" id="CKp_bind">
        <Reactant specieID="CKp"                    />
        <Reactant specieID="PP1"                    />
        <Product  specieID="CKpPP1"                 />
        <forwardRate> 0.0045e-06     </forwardRate>
        <reverseRate>  0.08e-03  </reverseRate>
        <Q10>     0.2             </Q10>
    </Reaction>

<!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1 reac" id="CKpPP1_reac">
        <Reactant specieID="CKpPP1"                 />
        <Product specieID="PP1"                     />
        <Product specieID="CK"                      />
        <forwardRate> 0.01e-03   </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>

    <!-- CKpCaMCa4 + PP1 <-> CKpCaMCa4PP1 -->
    <Reaction name = "CKpCaMCa4PP1_bind" id="CKpCaMPP1_bind">
      <Reactant specieID="CKpCaMCa4"              />
      <Reactant specieID="PP1"                    />
      <Product  specieID="CKpCaMCa4PP1"           />
      
      <forwardRate> 0.0005e-06  </forwardRate>
      <reverseRate> 0.09e-03   </reverseRate>
    </Reaction>

    <!--Dephos of CKpCaMCa4 by PP1 -->
    <!-- CKpCaMCa4PP1 -> PP1 + CKCaMCa4 -->
    <Reaction name = "CKpCaMCa4PP1_reac" id="CKpCaMPP1_reac">
      <Reactant specieID="CKpCaMCa4PP1"           />
      <Product  specieID="PP1"                    />
      <Product  specieID="CKCaMCa4"               />
      
      <forwardRate> 0.0045e-3    </forwardRate>
      <reverseRate> 0.0         </reverseRate>
    </Reaction>

<!--1) I1 + PKAc
        <-> I1PKAc -->
<Reaction name="I1_bind" id="I1_bind">
  <Reactant specieID="I1" />
  <Reactant specieID="PKAc" />
  <Product specieID="I1PKAc" />
  <forwardRate>0.0014e-3</forwardRate>
  <reverseRate>0.0056</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--2) I1PKAc -> Ip35 + PKAc: default kb=0 -->
<Reaction name="I1PKAc_reac" id="I1PKAc_reac">
  <Reactant specieID="I1PKAc" />
  <Product specieID="Ip35" />
  <Product specieID="PKAc" />
  <forwardRate>1.4e-3</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--3) Ip35 + PP1
        <-> Ip35pp1 -->
<Reaction name="Ip35_bind" id="Ip35_bind">
  <Reactant specieID="Ip35" />
  <Reactant specieID="PP1" />
  <Product specieID="Ip35PP1" />
  <forwardRate>0.001e-3</forwardRate>
  <reverseRate>0.0011e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--4) Ip35 + PP2B
        <-> Ip35pp2b -->
<Reaction name="Ip35pp2b_bind" id="Ip35pp2b_bind">
  <Reactant specieID="Ip35" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="Ip35PP2BCaMCa4" />
  <forwardRate>9.625e-05</forwardRate>
  <reverseRate>0.33</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--5) Ip35pp2b -> I1 + PP2B -->
<Reaction name="Ip35pp2b_reac" id="Ip35pp2b_reac">
  <Reactant specieID="Ip35PP2BCaMCa4" />
  <Product specieID="I1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.055</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--6) Ip35pp1 + PP2B
        <-> Ip35p1p2 -->
<Reaction name="Ip35pp1_bind" id="Ip35pp1_bind">
  <Reactant specieID="Ip35PP1" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="Ip35PP1PP2BCaMCa4" />
  <forwardRate>9.625e-5</forwardRate>
  <reverseRate>0.33</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--7a) Ip35p1p2 -> I1 + PP1PP2B -->
<Reaction name="Ip35p1p2_reac" id="Ip35p1p2_reac">
  <Reactant specieID="Ip35PP1PP2BCaMCa4" />
  <Product specieID="I1" />
  <Product specieID="PP1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.055</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>


<!-- AMPA receptor is phosporylation by PKAc,PhospCaMKII -->
<!-- And also dephosphorylation by PP1 and PP2B -->
<!--For now, rate constants have been fitted to exp. data mostly from Coultrap et al. 2014 for CaMKII and PP1 and doi: 10.4161/cib.4.5.15890 and Yan et a 1999 (Greengard lab) -->
<!-- S845 -->
<!--1) GluR1 + PKAc
    <-> GluR1_PKAc -->


<Reaction name="GluR1_PKAc_bind" id="GluR1_PKAc_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="PKAc" />
  <Product specieID="GluR1_PKAc" />
  <forwardRate>0.00009e-3</forwardRate>
  <reverseRate>0.72e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_PKAc -> GluR1_S845 + PKAc -->
<Reaction name="GluR1_PKAc_diss" id="GluR1_PKAc_diss">
  <Reactant specieID="GluR1_PKAc" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PKAc" />
  <forwardRate>6.e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_PP1_bind" id="GluR1_S845_PP1_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_PP1" />
  <forwardRate>0.0000087e-2</forwardRate>
  <reverseRate>.68e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S845_PP1_diss" id="GluR1_S845_PP1_diss">
  <Reactant specieID="GluR1_S845_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.1e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<Reaction name="GluR1_S845_PP2B_bind" id="GluR1_S845_PP2B_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_PP2B" />
  <forwardRate>0.0064e-3</forwardRate>
  <reverseRate>.8e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S845_PP2B_diss" id="GluR1_S845_PP2B_diss">
  <Reactant specieID="GluR1_S845_PP2B" />
  <Product specieID="GluR1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.11e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<!--S831-->

<Reaction name="GluR1_CKCaM_bind" id="GluR1_CKCaM_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_CKCaM" />
  <forwardRate>96.224e-9</forwardRate>
  <reverseRate>.2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKCaM -> GluR1_S831 + CKCaM -->
<Reaction name="GluR1_CKCaM_diss" id="GluR1_CKCaM_diss">
  <Reactant specieID="GluR1_CKCaM" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKpCaM_bind" id="GluR1_CKpCaM_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_CKpCaM" />
  <forwardRate>32.78e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKpCaM -> GluR1_S831 + CKpCaM -->
<Reaction name="GluR1_CKpCaM_diss" id="GluR1_CKpCaM_diss">
  <Reactant specieID="GluR1_CKpCaM" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_bind" id="GluR1_CKp_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_CKp" />
  <forwardRate>32.224e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_diss" id="GluR1_CKp_diss">
  <Reactant specieID="GluR1_CKp" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S831_PP1_bind" id="GluR1_S831_PP1_bind">
  <Reactant specieID="GluR1_S831" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S831_PP1" />
  <forwardRate>8.75e-6</forwardRate>
  <reverseRate>28e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S831_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S831_PP1_diss" id="GluR1_S831_PP1_diss">
  <Reactant specieID="GluR1_S831_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.5e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>


<Reaction name="GluR1_S831_PP2B_bind" id="GluR1_S831_PP2B_bind">
  <Reactant specieID="GluR1_S831" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S831_PP2B" />
  <forwardRate>8.75e-6</forwardRate>
  <reverseRate>28e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S831_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S831_PP2B_diss" id="GluR1_S831_PP2B_diss">
  <Reactant specieID="GluR1_S831_PP2B" />
  <Product specieID="GluR1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.5e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<!--S567-->


<Reaction name="GluR1_CKCaM_bind2" id="GluR1_CKCaM_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_CKCaM2" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>1.6e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKCaM -> GluR1_S567 + CKCaM -->
<Reaction name="GluR1_CKCaM_diss" id="GluR1_CKCaM_diss2">
  <Reactant specieID="GluR1_CKCaM2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKpCaM_bind2" id="GluR1_CKpCaM_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_CKpCaM2" />
  <forwardRate>320.78e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKpCaM -> GluR1_S567 + CKpCaM -->
<Reaction name="GluR1_CKpCaM_diss2" id="GluR1_CKpCaM_diss2">
  <Reactant specieID="GluR1_CKpCaM2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_bind2" id="GluR1_CKp_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_CKp2" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_diss2" id="GluR1_CKp_diss2">
  <Reactant specieID="GluR1_CKp2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S567_PP1_bind" id="GluR1_S567_PP1_bind">
  <Reactant specieID="GluR1_S567" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S567_PP1" />
  <forwardRate>16.75e-6</forwardRate>
  <reverseRate>14e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S567_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S567_PP1_diss" id="GluR1_S567_PP1_diss">
  <Reactant specieID="GluR1_S567_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.4e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S567_PP2B_bind" id="GluR1_S567_PP2B_bind">
  <Reactant specieID="GluR1_S567" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S567_PP2B" />
  <forwardRate>16.75e-6</forwardRate>
  <reverseRate>14e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S567_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S567_PP2B_diss" id="GluR1_S567_PP2B_diss">
  <Reactant specieID="GluR1_S567_PP2B" />
  <Product specieID="GluR1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.4e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<!--S845_S831-->

<Reaction name="GluR1_S845_CKCaM_bind" id="GluR1_S845_CKCaM_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_S845_CKCaM2" />
  <forwardRate>96.224e-9</forwardRate>
  <reverseRate>0.2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_CKCaM -> GluR1_S845_S831 + CKCaM -->
<Reaction name="GluR1_S845_CKCaM_diss" id="GluR1_S845_CKCaM_diss">
  <Reactant specieID="GluR1_S845_CKCaM2" />
  <Product specieID="GluR1_S845_S831" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--6) GluR1_S845 + CKpCaM
        <-> GluR1_S845_CKpCaM -->
<Reaction name="GluR1_S845_CKpCaM_bind"
id="GluR1_S845_CKpCaM_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_S845_CKpCaM2" />
  <forwardRate>32.78e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_CKpCaM -> GluR1_S845_S831 + CKpCaM -->
<Reaction name="GluR1_S845_CKpCaM_diss"
id="GluR1_S845_CKpCaM_diss">
  <Reactant specieID="GluR1_S845_CKpCaM2" />
  <Product specieID="GluR1_S845_S831" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--7) GluR1_S845 + CKp
        <-> GluR1_S845_CKp -->
<Reaction name="GluR1_S845_CKp_bind" id="GluR1_S845_CKp_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_S845_CKp2" />
  <forwardRate>32.224e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKp -> GluR1_S845_S831 + CKp -->
<Reaction name="GluR1_S845_CKp_diss" id="GluR1_S845_CKp_diss">
  <Reactant specieID="GluR1_S845_CKp2" />
  <Product specieID="GluR1_S845_S831" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S831_PKAc_bind" id="GluR1_S831_PKAc_bind">
  <Reactant specieID="GluR1_S831" />
  <Reactant specieID="PKAc" />
  <Product specieID="GluR1_S831_PKAc" />
  <forwardRate>0.00009e-3</forwardRate>
  <reverseRate>0.72e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_PKAc -> GluR1_S845 + PKAc -->
<Reaction name="GluR1_S831_PKAc_diss" id="GluR1_S831_PKAc_diss">
  <Reactant specieID="GluR1_S831_PKAc" />
  <Product specieID="GluR1_S845_S831" />
  <Product specieID="PKAc" />
  <forwardRate>6.e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--S845_S567-->

<Reaction name="GluR1_S845_CKCaM_bind2" id="GluR1_S845_CKCaM_bind2">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_S845_CKCaM" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>1.6e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_CKCaM -> GluR1_S845_S567 + CKCaM -->
<Reaction name="GluR1_S845_CKCaM_diss2" id="GluR1_S845_CKCaM_diss2">
  <Reactant specieID="GluR1_S845_CKCaM" />
  <Product specieID="GluR1_S845_S567" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--6) GluR1_S845 + CKpCaM
        <-> GluR1_S845_CKpCaM -->
<Reaction name="GluR1_S845_CKpCaM_bind2"
	  id="GluR1_S845_CKpCaM_bind2">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_S845_CKpCaM" />
  <forwardRate>320.78e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_CKpCaM -> GluR1_S845_S567 + CKpCaM -->
<Reaction name="GluR1_S845_CKpCaM_diss2"
id="GluR1_S845_CKpCaM_diss2">
  <Reactant specieID="GluR1_S845_CKpCaM" />
  <Product specieID="GluR1_S845_S567" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--7) GluR1_S845 + CKp
        <-> GluR1_S845_CKp -->
<Reaction name="GluR1_S845_CKp_bind2" id="GluR1_S845_CKp_bind2">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_S845_CKp" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKp -> GluR1_S845_S567 + CKp -->
<Reaction name="GluR1_S845_CKp_diss2" id="GluR1_S845_CKp_diss2">
  <Reactant specieID="GluR1_S845_CKp" />
  <Product specieID="GluR1_S845_S567" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S567_PKAc_bind" id="GluR1_S657_PKAc_bind">
  <Reactant specieID="GluR1_S567" />
  <Reactant specieID="PKAc" />
  <Product specieID="GluR1_S567_PKAc" />
  <forwardRate>0.00009e-3</forwardRate>
  <reverseRate>0.72e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_PKAc -> GluR1_S845 + PKAc -->
<Reaction name="GluR1_PKAc_diss" id="GluR1_PKAc_diss">
  <Reactant specieID="GluR1_S567_PKAc" />
  <Product specieID="GluR1_S845_S567" />
  <Product specieID="PKAc" />
  <forwardRate>6.e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>


<!--S845-S831-->

<!--10) GluR1_S845_S831 + PP1
    <-> GluR1_S845_S831_PP1 -->


<Reaction name="GluR1_S845_S831_PP1_bind"
id="GluR1_S845_S831_PP1_bind">
  <Reactant specieID="GluR1_S845_S831" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_S831_PP1" />
  <forwardRate>0.0000087e-2</forwardRate>
  <reverseRate>.68e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>



<!--10a) GluR1_S845_S831_PP1 -> GluR1_S845 + PP1 -->
<Reaction name="GluR1_S845_S831_PP1_diss"
id="GluR1_S845_S831_PP1_diss">
  <Reactant specieID="GluR1_S845_S831_PP1" />
  <Product specieID="GluR1_S831" />
  <Product specieID="PP1" />
  <forwardRate>0.1e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S831_PP1_bind2"
id="GluR1_S845_S831_PP1_bind2">
  <Reactant specieID="GluR1_S845_S831" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_S831_PP1_2" />
  <forwardRate>8.75e-6</forwardRate>
  <reverseRate>28e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>
  
<Reaction name="GluR1_S845_S831_PP1_diss2"
id="GluR1_S845_S831_PP1_diss2">
  <Reactant specieID="GluR1_S845_S831_PP1_2" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PP1" />
  <forwardRate>0.5e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S831_PP2B_bind2"
id="GluR1_S845_S831_PP2B_bind2">
  <Reactant specieID="GluR1_S845_S831" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_S831_PP2B_2" />
  <forwardRate>8.75e-6</forwardRate>
  <reverseRate>28e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S831_PP2B_diss2"
id="GluR1_S845_S831_PP2B_diss2">
  <Reactant specieID="GluR1_S845_S831_PP2B_2" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.5e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<!--S845-S567-->
<!--10) GluR1_S845_S567 + PP1
        <-> GluR1_S845_S567_PP1 -->
<Reaction name="GluR1_S845_S567_PP1_bind"
id="GluR1_S845_S567_PP1_bind">
  <Reactant specieID="GluR1_S845_S567" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_S567_PP1" />
  <forwardRate>0.0000087e-2</forwardRate>
  <reverseRate>.68e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>
<!--10a) GluR1_S845_S567_PP1 -> GluR1_S845 + PP1 -->
<Reaction name="GluR1_S845_S567_PP1_diss"
id="GluR1_S845_S567_PP1_diss">
  <Reactant specieID="GluR1_S845_S567_PP1" />
  <Product specieID="GluR1_S567" />
  <Product specieID="PP1" />
  <forwardRate>0.1e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S567_PP1_bind2"
id="GluR1_S845_S567_PP1_bind2">
  <Reactant specieID="GluR1_S845_S567" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_S567_PP1_2" />
  <forwardRate>16.75e-6</forwardRate>
  <reverseRate>14e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>
  
<Reaction name="GluR1_S845_S567_PP1_diss2"
id="GluR1_S845_S567_PP1_diss2">
  <Reactant specieID="GluR1_S845_S567_PP1_2" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PP1" />
  <forwardRate>0.4e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>


<Reaction name="GluR1_S845_S567_PP2B_bind2"
id="GluR1_S845_S567_PP2B_bind2">
  <Reactant specieID="GluR1_S845_S567" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_S567_PP2B_2" />
  <forwardRate>16.75e-6</forwardRate>
  <reverseRate>14e-3</reverseRate>
  
  <Q10>0.2</Q10>
</Reaction>
  
<Reaction name="GluR1_S845_S567_PP2B_diss2"
id="GluR1_S845_S567_PP2B_diss2">
  <Reactant specieID="GluR1_S845_S567_PP2B_2" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.4e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S831_PP2B_bind" id="GluR1_S845_S831_PP2B_bind">
  <Reactant specieID="GluR1_S845_S831" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_S831_PP2B" />
  <forwardRate>0.0064e-3</forwardRate>
  <reverseRate>.8e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S845_PP2B_diss" id="GluR1_S845_PP2B_diss">
  <Reactant specieID="GluR1_S845_S831_PP2B" />
  <Product specieID="GluR1_S831" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.11e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_S567_PP2B_bind" id="GluR1_S845_S567_PP2B_bind">
  <Reactant specieID="GluR1_S845_S567" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_S567_PP2B" />
  <forwardRate>0.0064e-3</forwardRate>
  <reverseRate>.8e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!-- GluR1_S845_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S845_S567_PP2B_diss" id="GluR1_S845_S567_PP2B_diss">
  <Reactant specieID="GluR1_S845_S567_PP2B" />
  <Product specieID="GluR1_S567" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.11e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

    
    
</ReactionScheme>
