<?xml version="1.0"?>
<ReactionScheme>
<Specie name="GluR1" id="GluR1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_PKAc" id="GluR1_PKAc" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845" id="GluR1_S845" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_PP2B" id="GluR1_S845_PP2B" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S845_PP1" id="GluR1_S845_PP1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PP2CaMCa4" id="PP2BCaMCa4" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PKAc" id="PKAc" kdiff="0.836" kdiffunit="mu2/s" />


<Reaction name="GluR1_PKAc_bind" id="GluR1_PKAc_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="PKAc" />
  <Product specieID="GluR1_PKAc" />
  <forwardRate>0.0002824e-3</forwardRate>
  <reverseRate>0.72e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_PKAc -> GluR1_S845 + PKAc -->
<Reaction name="GluR1_PKAc_diss" id="GluR1_PKAc_diss">
  <Reactant specieID="GluR1_PKAc" />
  <Product specieID="GluR1_S845" />
  <Product specieID="PKAc" />
  <forwardRate>6.e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S845_PP1_bind" id="GluR1_S845_PP1_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S845_PP1" />
  <forwardRate>0.0000087e-2</forwardRate>
  <reverseRate>.68e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S845_PP1_diss" id="GluR1_S845_PP1_diss">
  <Reactant specieID="GluR1_S845_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.1e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>
<Reaction name="GluR1_S845_PP2B_bind" id="GluR1_S845_PP2B_bind">
  <Reactant specieID="GluR1_S845" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="GluR1_S845_PP2B" />
  <forwardRate>0.0001601e-3</forwardRate>
  <reverseRate>.8e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S845_PP2B -> GluR1 + PP2B -->
<Reaction name="GluR1_S845_PP2B_diss" id="GluR1_S845_PP2B_diss">
  <Reactant specieID="GluR1_S845_PP2B" />
  <Product specieID="GluR1" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>0.11e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

</ReactionScheme>
