<ReactionScheme>
    
    <!-- you can specify the units of the diffusion constant. If they are not 
	 specified they are assumed to be micron^2/second, (microns written "mu" here)
	 it should understand microns, mm, and m for distances and seconds and ms for times --> 
    
    <!-- This code is implemented CamKII_bimols Rxns -0.44, 0.28, 0.088
         Fix 3 products 2rxns break down to 2nd order rxn : LRG/Ip35P1P2 -->
    <!-- last rxn of Ip35p1p2 was wrong reactant:fixed on Aug,8th,2008
         Chosen katp=1 sec(not 10 sec) is enough   -->

    <Specie name="Camout" id="Camout" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="CamCa4" id="CamCa4" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CK" id="CK" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="CKCam" id="CKCam" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="CKpCam" id="CKpCam" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="CKp" id="CKp" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="Complex" id="Complex" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="pComplex" id="pComplex" kdiff="0" kdiffunit = "mu2/s"/>
 
<!-- Cam pump-    CamCa4  <-> Camout -->
    <Reaction name = "Ca_pump" id="Ca_pump">
	<Reactant specieID="CamCa4"/>
	<Product specieID="Camout"/>

	<forwardRate>0.5</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- New CamKII part -->

    <!-- ms units for reaction rates -->

  <!--1) CamCa4 + CK <-> CKCam  -->
    <Reaction name = "CK_bind" id="CK_bind">
	<Reactant specieID="CamCa4"/>
	<Reactant specieID="CK"/>
	<Product specieID="CKCam"/>

	<forwardRate>0.01e-3</forwardRate>
	<reverseRate>1.5e-3</reverseRate>
	<!-- rate from original model -->
	<!--reverseRate>0.8e-3</reverseRate --> 
	<Q10>0.2</Q10>
    </Reaction>

<!--2a) CKCam + CKCam <-> Complex -->
    <Reaction name = "CKCam_bind" id="CKCam_bind">
	<Reactant specieID="CKCam"/>
        <Reactant specieID="CKCam"/>
	<Product specieID="Complex"/>

	<forwardRate>4e-8</forwardRate>
        <reverseRate>10e-3</reverseRate>
	<Q10>2</Q10>
    </Reaction>

<!--2b) CKpCam + CKCam <-> pComplex -->
    <Reaction name = "pComplex_bind" id="pComplex_bind">
	<Reactant specieID="CKpCam"/>
        <Reactant specieID="CKCam"/>
	<Product specieID="pComplex"/>

	<forwardRate>4e-8</forwardRate>
        <reverseRate>10e-3</reverseRate>
	<Q10>2</Q10>
    </Reaction>

<!--3a) CKpCam + Complex <-> CKpCam + pComplex -->
    <Reaction name = "CKpCamCompl_bind" id="CKpCamCompl_bind">
	<Reactant specieID="CKpCam"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKpCam"/>
	<Product specieID="pComplex"/>

	<forwardRate>0.0001e-3</forwardRate>
        <reverseRate>0</reverseRate>
	<Q10>2</Q10>
    </Reaction>

<!--3b) CKCam + Complex <-> CKCam + pComplex -->
    <Reaction name = "CKCamCompl_bind" id="CKCamCompl_bind">
	<Reactant specieID="CKCam"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKCam"/>
	<Product specieID="pComplex"/>

	<forwardRate>0.0001e-3</forwardRate>
        <reverseRate>0</reverseRate>
	<Q10>2</Q10>
    </Reaction>

 <!--4a) Complex + Complex <-> Complex + Pcomplex --> 
    <Reaction name = "2Complex_bind" id="2Complex_bind">
	<Reactant specieID="Complex"/>
        <Reactant specieID="Complex"/>
	<Product specieID="Complex"/>
        <Product specieID="pComplex"/>

	<forwardRate>0.01e-3</forwardRate>
        <reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

 <!--4b) Complex + pComplex <-> Pcomplex + pComplex-->
    <Reaction name = "ComplpCompl_bind" id="ComplpCompl_bind">
	<Reactant specieID="Complex"/>
	<Reactant specieID="pComplex"/>
	<Product specieID="pComplex"/>
        <Product specieID="pComplex"/>

	<forwardRate>0.03e-3</forwardRate>
        <reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- CKpCam + CamCa4 <-> CKp -->
    <Reaction name = "CKp_auto" id="CKp_auto">
	<Reactant specieID="CKpCam"/>
        <Product specieID="CamCa4"/>
	<Product specieID="CKp"/>

	<forwardRate>0.0008e-3</forwardRate>
	<reverseRate>0.01e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

</ReactionScheme>
 
