<?xml version="1.0"?>
<ReactionScheme>
<Specie name="NMDAR" id="NMDAR" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PKAcNMDAR" id="PKAcNMDAR" kdiff="0" kdiffunit="mu2/s" />
<Specie name="pNMDAR" id="pNMDAR" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PP2BpNMDAR" id="PP2BpNMDAR" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PP1pNMDAR" id="PP1pNMDAR" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PP2CaMCa4" id="PP2BCaMCa4" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="PKAc" id="PKAc" kdiff="0.836" kdiffunit="mu2/s" />


<Reaction name="NMDARPKAc_bind" id="bindNMDARPKAc">
  <Reactant specieID="NMDAR" />
  <Reactant specieID="PKAc" />
  <Product specieID="PKAcNMDAR" />
  <forwardRate>0.0232e-3</forwardRate>
  <reverseRate>720e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!-- NMDAR_PKAc -> pNMDAR + PKAc -->
<Reaction name="pNMDARPKAc_reac" id="reacpNMDARPKAc">
  <Reactant specieID="PKAcNMDAR" />
  <Product specieID="pNMDAR" />
  <Product specieID="PKAc" />
  <forwardRate>6.e-3</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!--12) pNMDAR + PP2B
        <-> PP2BpNMDAR -->
<Reaction name="pNMDARPP2B_bind" id="bindpNMDARPP2B">
  <Reactant specieID="pNMDAR" />
  <Reactant specieID="PP2BCaMCa4" />
  <Product specieID="PP2BpNMDAR" />
  <forwardRate>3.2e-3</forwardRate>
  <reverseRate>1600e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- PP2BpNMDAR -> NMDAR + PP2B -->
<Reaction name="pNMDARPP2B_reac" id="reacpNMDARPP2B">
  <Reactant specieID="PP2BpNMDAR" />
  <Product specieID="NMDAR" />
  <Product specieID="PP2BCaMCa4" />
  <forwardRate>2e-3</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="pNMDARPP1_bind" id="bindpNMDARPP1">
  <Reactant specieID="pNMDAR" />
  <Reactant specieID="PP1" />
  <Product specieID="PP1pNMDAR" />
  <forwardRate>3.4e-6</forwardRate>
  <reverseRate>1600e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- PP2BpNMDAR -> NMDAR + PP2B -->
<Reaction name="pNMDARPP1_reac" id="reacpNMDARPP1">
  <Reactant specieID="PP1pNMDAR" />
  <Product specieID="NMDAR" />
  <Product specieID="PP1" />
  <forwardRate>2e-3</forwardRate>
  <reverseRate>0</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
</ReactionScheme>
